name: Place_Tube_Rack
metadata:
  author: Tobias Ginsburg, Kyle Hippe, Ryan D. Lewis
  info: Example workflow for WEI
  version: 0.2

# modules:
#   - name: sleeper
#   - name: webcam

flowdef:
  - name: Home UR
    module: ur_aarl200
    action: movej
    args:
      joints: ur_aarl200.travel_safe_joints
      a: 0.35
      v: 0.35
  - name: Move Rail to Place Position
    module: vention_rail_aarl200
    action: move
    args:
      position: vention_rail_aarl200.supply_table
      speed: 30
      acceleration: 10
  - name: Set UR Params
    module: ur_aarl200
    action: set_movement_params
    args:
      velocity: 0.35
      acceleration: 0.35
      gripper_speed: 50
      gripper_force: 150
  - name : Test Gripper Place
    module : ur_aarl200
    action : gripper_place
    args : 
      home : ur_aarl200.supply_station_safe_joints
      target : ur_aarl200.supply_rack_icp1
      target_approach_axis : null
      target_approach_distance : .15
      gripper_open : null
